<PlusConfiguration version="2.7">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="PlusServer: OptiTrack (Webcam)"
      Description="Broadcasting tracking data through OpenIGTLink."
    />
    <Device
      Id="TrackerDevice"
      Type="OptiTrack"
      ToolReferenceFrame="Tracker" 
      ProjectFile="Optic.ttp"
      AttachToRunningMotive="FALSE"
      MotiveDataDescriptionsUpdateTimeSec="1.0" >
      <DataSources>
        <DataSource Type="Tool" Id="Webcam" />
        <DataSource Type="Tool" Id="Needle" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
        <DataSource Type="Tool" Id="Webcam" />
        <DataSource Type="Tool" Id="Needle" />
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>
  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="TRUE"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="WebcamToTracker" />
        <Transform Name="NeedleToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>